<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="1.0.516.0">
  <Workflow xmlns:q1="clr-namespace:Bonsai.BehaviorAnalysis;assembly=Bonsai.BehaviorAnalysis" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q3="clr-namespace:Bonsai.IO;assembly=Bonsai.IO" xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Source">
        <Source xsi:type="q1:VideoEventPlayer">
          <q1:PlaybackMode>Events</q1:PlaybackMode>
          <q1:FileName>..\front_video.avi</q1:FileName>
          <q1:PlaybackRate>30</q1:PlaybackRate>
          <q1:Playing>true</q1:Playing>
          <q1:ActionMapping />
          <q1:EventCategories>
            <q1:EventDescriptorCategory>player.csv</q1:EventDescriptorCategory>
          </q1:EventCategories>
          <q1:EventOffset>PT0S</q1:EventOffset>
          <q1:DefaultDuration>PT1S</q1:DefaultDuration>
        </Source>
      </Expression>
      <Expression xsi:type="WindowWorkflow">
        <Name>RemoveTimestamp</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput" />
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="RemoveTimestamp" />
            <Expression xsi:type="Select">
              <Transform xsi:type="q2:Crop">
                <q2:RegionOfInterest>
                  <q2:X>0</q2:X>
                  <q2:Y>0</q2:Y>
                  <q2:Width>0</q2:Width>
                  <q2:Height>0</q2:Height>
                </q2:RegionOfInterest>
              </Transform>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>1</To>
              <Label>Source</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Merge" />
      <Expression xsi:type="q1:RepeatCurrentDirectory">
        <q1:FileName>C:\Users\gonca_000\Documents\Insync\kampff.lab@gmail.com\protocols\shuttling\analysis\clipDirectories.csv</q1:FileName>
      </Expression>
      <Expression xsi:type="Do">
        <Sink xsi:type="q2:VideoWriter">
          <q2:FileName>C:\Users\gonca_000\Desktop\jpak25_pause_slow4times.avi</q2:FileName>
          <q2:Suffix>None</q2:Suffix>
          <q2:Buffered>false</q2:Buffered>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>30</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Sink>
      </Expression>
      <Expression xsi:type="Skip">
        <Count>0</Count>
      </Expression>
      <Expression xsi:type="q3:ToggleSwitch">
        <q3:Enabled>false</q3:Enabled>
      </Expression>
      <Expression xsi:type="q1:ColorWheel">
        <q1:Colors>White;Red</q1:Colors>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>3</To>
        <Label>Source</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>5</To>
        <Label>Source</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>7</To>
        <Label>Source</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>6</To>
        <Label>Source</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>4</To>
        <Label>Source</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>2</To>
        <Label>Source</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.BehaviorAnalysis.VideoEventPlayer, Bonsai.BehaviorAnalysis, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.RemoveTimestampBuilder, Bonsai, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.BehaviorAnalysis.RepeatCurrentDirectory, Bonsai.BehaviorAnalysis, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.ToggleSwitch, Bonsai.IO, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.BehaviorAnalysis.ColorWheel, Bonsai.BehaviorAnalysis, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>