<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="1.0.440.0">
  <Workflow xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q2="clr-namespace:Bonsai.Vision.AForge;assembly=Bonsai.Vision.AForge" xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Source">
        <Source xsi:type="q1:FileCapture">
          <q1:FileName>..\front_video.mp4</q1:FileName>
          <q1:PlaybackRate>0</q1:PlaybackRate>
          <q1:Loop>true</q1:Loop>
          <q1:Playing>false</q1:Playing>
        </Source>
      </Expression>
      <Expression xsi:type="Select">
        <Transform xsi:type="q1:Grayscale" />
      </Expression>
      <Expression xsi:type="Select">
        <Transform xsi:type="q1:Threshold">
          <q1:ThresholdValue>128</q1:ThresholdValue>
          <q1:MaxValue>255</q1:MaxValue>
          <q1:ThresholdType>Binary</q1:ThresholdType>
        </Transform>
      </Expression>
      <Expression xsi:type="Select">
        <Transform xsi:type="q1:FindContours">
          <q1:Mode>External</q1:Mode>
          <q1:Method>CHAIN_APPROX_NONE</q1:Method>
          <q1:Offset>
            <q1:X>0</q1:X>
            <q1:Y>0</q1:Y>
          </q1:Offset>
          <q1:MinArea>0</q1:MinArea>
        </Transform>
      </Expression>
      <Expression xsi:type="Select">
        <Transform xsi:type="q1:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Select">
        <Transform xsi:type="q1:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Select">
        <Transform xsi:type="q1:BinaryRegionExtremes">
          <q1:Method>Horizontal</q1:Method>
        </Transform>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>2</To>
        <Label>Source</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>3</To>
        <Label>Source</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>4</To>
        <Label>Source</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>5</To>
        <Label>Source</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>6</To>
        <Label>Source</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Vision.FileCapture, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Grayscale, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionExtremes, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>