<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="1.0.490.0">
  <Workflow xmlns:q1="clr-namespace:Bonsai.BehaviorAnalysis;assembly=Bonsai.BehaviorAnalysis" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q3="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Source">
        <Source xsi:type="q1:VideoEventPlayer">
          <q1:PlaybackMode>Events</q1:PlaybackMode>
          <q1:FileName>..\front_video.avi</q1:FileName>
          <q1:PlaybackRate>500</q1:PlaybackRate>
          <q1:Playing>true</q1:Playing>
          <q1:ActionMapping />
          <q1:EventCategories>
            <q1:EventDescriptorCategory>crossings.csv</q1:EventDescriptorCategory>
          </q1:EventCategories>
          <q1:EventOffset>-PT2S</q1:EventOffset>
          <q1:DefaultDuration>PT5S</q1:DefaultDuration>
        </Source>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput" />
            <Expression xsi:type="RemoveTimestamp" />
            <Expression xsi:type="Select">
              <Transform xsi:type="q2:Grayscale" />
            </Expression>
            <Expression xsi:type="Select">
              <Transform xsi:type="q2:Average" />
            </Expression>
            <Expression xsi:type="Do">
              <Sink xsi:type="q3:PythonTextWriter">
                <q3:Script>def process(input):
    print input.Val0,

def unload():
    print</q3:Script>
                <q3:FileName>mean.csv</q3:FileName>
                <q3:Append>true</q3:Append>
                <q3:Suffix>None</q3:Suffix>
              </Sink>
            </Expression>
            <Expression xsi:type="Select">
              <Transform xsi:type="q1:TimestampImageFileMatch">
                <q1:BackgroundFolder>Background</q1:BackgroundFolder>
                <q1:MatchMethod>ClosestAfter</q1:MatchMethod>
              </Transform>
            </Expression>
            <Expression xsi:type="Take">
              <Count>1</Count>
            </Expression>
            <Expression xsi:type="CombineLatest" />
            <Expression xsi:type="Select">
              <Transform xsi:type="q2:Crop">
                <q2:RegionOfInterest>
                  <q2:X>0</q2:X>
                  <q2:Y>0</q2:Y>
                  <q2:Width>0</q2:Width>
                  <q2:Height>0</q2:Height>
                </q2:RegionOfInterest>
              </Transform>
            </Expression>
            <Expression xsi:type="Select">
              <Transform xsi:type="q2:Subtract" />
            </Expression>
            <Expression xsi:type="Select">
              <Transform xsi:type="q2:Threshold">
                <q2:ThresholdValue>4</q2:ThresholdValue>
                <q2:MaxValue>255</q2:MaxValue>
                <q2:ThresholdType>Binary</q2:ThresholdType>
              </Transform>
            </Expression>
            <Expression xsi:type="Select">
              <Transform xsi:type="q2:FindContours">
                <q2:Mode>External</q2:Mode>
                <q2:Method>CHAIN_APPROX_NONE</q2:Method>
                <q2:Offset>
                  <q2:X>0</q2:X>
                  <q2:Y>0</q2:Y>
                </q2:Offset>
                <q2:MinArea>5000</q2:MinArea>
              </Transform>
            </Expression>
            <Expression xsi:type="Select">
              <Transform xsi:type="q2:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Select">
              <Transform xsi:type="q2:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Do">
              <Sink xsi:type="q3:PythonSink">
                <q3:Script>steps = None

def load():
    global steps
    steps = None

def process(input):
    global steps
    if steps is None:
        steps = [open("step%s.csv" % (f),'a') for f in range(input.Count)]

    for i in range(input.Count):
        steps[i].write("%s " % (input[i].Activity.Val0))

def unload():
    global steps
    for file in steps:
        file.write("\n")
        file.close()</q3:Script>
              </Sink>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Zip" />
            <Expression xsi:type="Select">
              <Transform xsi:type="q2:DrawContours">
                <q2:MaxLevel>1</q2:MaxLevel>
                <q2:Thickness>-1</q2:Thickness>
              </Transform>
            </Expression>
            <Expression xsi:type="Do">
              <Sink xsi:type="q3:PythonTextWriter">
                <q3:Script>def process(input):
    print input.Timestamp.ToString("o"),

def unload():
    print</q3:Script>
                <q3:FileName>trial_time.csv</q3:FileName>
                <q3:Append>true</q3:Append>
                <q3:Suffix>None</q3:Suffix>
              </Sink>
            </Expression>
            <Expression xsi:type="Zip" />
            <Expression xsi:type="Zip" />
            <Expression xsi:type="Zip" />
            <Expression xsi:type="Do">
              <Sink xsi:type="q3:PythonTextWriter">
                <q3:Script>def process(input):
    print input.Centroid.X,

def unload():
    print</q3:Script>
                <q3:FileName>centroid_x.csv</q3:FileName>
                <q3:Append>true</q3:Append>
                <q3:Suffix>None</q3:Suffix>
              </Sink>
            </Expression>
            <Expression xsi:type="Do">
              <Sink xsi:type="q3:PythonTextWriter">
                <q3:Script>def process(input):
    print input.Centroid.Y,

def unload():
    print</q3:Script>
                <q3:FileName>centroid_y.csv</q3:FileName>
                <q3:Append>true</q3:Append>
                <q3:Suffix>None</q3:Suffix>
              </Sink>
            </Expression>
            <Expression xsi:type="Select">
              <Transform xsi:type="q2:SortBinaryRegions" />
            </Expression>
            <Expression xsi:type="Select">
              <Transform xsi:type="q1:TipTracking">
                <q1:Direction>Horizontal</q1:Direction>
              </Transform>
            </Expression>
            <Expression xsi:type="Do">
              <Sink xsi:type="q3:PythonTextWriter">
                <q3:Script>def process(input):
    print input.X,

def unload():
    print</q3:Script>
                <q3:FileName>tip_horizontal.csv</q3:FileName>
                <q3:Append>true</q3:Append>
                <q3:Suffix>None</q3:Suffix>
              </Sink>
            </Expression>
            <Expression xsi:type="Do">
              <Sink xsi:type="q3:PythonTextWriter">
                <q3:Script>def process(input):
    print input.Y,

def unload():
    print</q3:Script>
                <q3:FileName>tip_vertical.csv</q3:FileName>
                <q3:Append>true</q3:Append>
                <q3:Suffix>None</q3:Suffix>
              </Sink>
            </Expression>
            <Expression xsi:type="Select">
              <Transform xsi:type="q2:RoiActivity">
                <q2:Regions>
                  <q2:ArrayOfCvPoint>
                    <q2:CvPoint>
                      <q2:X>3</q2:X>
                      <q2:Y>103</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>38</q2:X>
                      <q2:Y>95</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>127</q2:X>
                      <q2:Y>94</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>127</q2:X>
                      <q2:Y>101</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>53</q2:X>
                      <q2:Y>109</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>2</q2:X>
                      <q2:Y>110</q2:Y>
                    </q2:CvPoint>
                  </q2:ArrayOfCvPoint>
                  <q2:ArrayOfCvPoint>
                    <q2:CvPoint>
                      <q2:X>158</q2:X>
                      <q2:Y>103</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>207</q2:X>
                      <q2:Y>97</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>276</q2:X>
                      <q2:Y>96</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>276</q2:X>
                      <q2:Y>105</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>214</q2:X>
                      <q2:Y>110</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>158</q2:X>
                      <q2:Y>111</q2:Y>
                    </q2:CvPoint>
                  </q2:ArrayOfCvPoint>
                  <q2:ArrayOfCvPoint>
                    <q2:CvPoint>
                      <q2:X>373</q2:X>
                      <q2:Y>100</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>422</q2:X>
                      <q2:Y>101</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>388</q2:X>
                      <q2:Y>113</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>332</q2:X>
                      <q2:Y>113</q2:Y>
                    </q2:CvPoint>
                  </q2:ArrayOfCvPoint>
                  <q2:ArrayOfCvPoint>
                    <q2:CvPoint>
                      <q2:X>524</q2:X>
                      <q2:Y>96</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>569</q2:X>
                      <q2:Y>96</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>558</q2:X>
                      <q2:Y>109</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>500</q2:X>
                      <q2:Y>110</q2:Y>
                    </q2:CvPoint>
                  </q2:ArrayOfCvPoint>
                  <q2:ArrayOfCvPoint>
                    <q2:CvPoint>
                      <q2:X>676</q2:X>
                      <q2:Y>100</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>719</q2:X>
                      <q2:Y>99</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>746</q2:X>
                      <q2:Y>111</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>688</q2:X>
                      <q2:Y>112</q2:Y>
                    </q2:CvPoint>
                  </q2:ArrayOfCvPoint>
                  <q2:ArrayOfCvPoint>
                    <q2:CvPoint>
                      <q2:X>821</q2:X>
                      <q2:Y>98</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>866</q2:X>
                      <q2:Y>97</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>910</q2:X>
                      <q2:Y>108</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>857</q2:X>
                      <q2:Y>109</q2:Y>
                    </q2:CvPoint>
                  </q2:ArrayOfCvPoint>
                  <q2:ArrayOfCvPoint>
                    <q2:CvPoint>
                      <q2:X>971</q2:X>
                      <q2:Y>99</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>971</q2:X>
                      <q2:Y>90</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>1011</q2:X>
                      <q2:Y>91</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>1086</q2:X>
                      <q2:Y>95</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>1086</q2:X>
                      <q2:Y>105</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>1031</q2:X>
                      <q2:Y>106</q2:Y>
                    </q2:CvPoint>
                  </q2:ArrayOfCvPoint>
                  <q2:ArrayOfCvPoint>
                    <q2:CvPoint>
                      <q2:X>1119</q2:X>
                      <q2:Y>95</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>1119</q2:X>
                      <q2:Y>87</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>1157</q2:X>
                      <q2:Y>87</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>1240</q2:X>
                      <q2:Y>93</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>1240</q2:X>
                      <q2:Y>102</q2:Y>
                    </q2:CvPoint>
                    <q2:CvPoint>
                      <q2:X>1191</q2:X>
                      <q2:Y>103</q2:Y>
                    </q2:CvPoint>
                  </q2:ArrayOfCvPoint>
                </q2:Regions>
              </Transform>
            </Expression>
            <Expression xsi:type="Select">
              <Transform xsi:type="q2:Crop">
                <q2:RegionOfInterest>
                  <q2:X>21</q2:X>
                  <q2:Y>467</q2:Y>
                  <q2:Width>1250</q2:Width>
                  <q2:Height>149</q2:Height>
                </q2:RegionOfInterest>
              </Transform>
            </Expression>
            <Expression xsi:type="Select">
              <Transform xsi:type="q2:Smooth">
                <q2:SmoothType>Blur</q2:SmoothType>
                <q2:Size1>5</q2:Size1>
                <q2:Size2>5</q2:Size2>
                <q2:Sigma1>0</q2:Sigma1>
                <q2:Sigma2>0</q2:Sigma2>
              </Transform>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>5</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>18</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>8</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>19</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>6</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>7</To>
              <Label>Other</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>9</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>7</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>3</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>30</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>11</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>12</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>17</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>24</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>23</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>21</To>
              <Label>Other</Label>
            </Edge>
            <Edge>
              <From>16</From>
              <To>21</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>29</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>18</From>
              <To>20</To>
              <Label>Other</Label>
            </Edge>
            <Edge>
              <From>19</From>
              <To>20</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>20</From>
              <To>15</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>21</From>
              <To>19</To>
              <Label>Other</Label>
            </Edge>
            <Edge>
              <From>22</From>
              <To>16</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>23</From>
              <To>22</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>24</From>
              <To>13</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>24</From>
              <To>25</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>25</From>
              <To>26</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>26</From>
              <To>27</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>27</From>
              <To>16</To>
              <Label>Other</Label>
            </Edge>
            <Edge>
              <From>28</From>
              <To>14</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>29</From>
              <To>28</To>
              <Label>Source</Label>
            </Edge>
            <Edge>
              <From>30</From>
              <To>10</To>
              <Label>Source</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.BehaviorAnalysis.VideoEventPlayer, Bonsai.BehaviorAnalysis, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.RemoveTimestampBuilder, Bonsai, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Grayscale, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Average, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTextWriter, Bonsai.Scripting, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.BehaviorAnalysis.TimestampImageFileMatch, Bonsai.BehaviorAnalysis, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Subtract, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonSink, Bonsai.Scripting, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.DrawContours, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.SortBinaryRegions, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.BehaviorAnalysis.TipTracking, Bonsai.BehaviorAnalysis, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.RoiActivity, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Smooth, Bonsai.Vision, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>